PsychoPy2experiment version="2024.2.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 2
  Show mouse = True
  Units = height
  Window size (pixels) = [2560, 1440]
  color = -1.0000, -1.0000, -1.0000
  expName = tapping_task
  keyboardBackend = ioHub
  measureFrameRate = False
  runMode = 0
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Routines
  Routine get_ready
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    TextComponent getready
      letterHeight = 0.03
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      stopVal [condition] = 0.0
      text = Get ready for the 12 taps task
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    KeyboardComponent continue1
      allowedKeys = '1','enter','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_2
      Code Type = Py
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      Begin Routine:
        condition=conditions[0]
        if "active" in condition:
            stim="active"
        if "sham" in condition:
            stim="sham"
  Routine task_12_taps
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    PolygonComponent red_cross_500
      fillColor = 1.0000, -1.0000, -1.0000
      lineColor = 1.0000, -1.0000, -1.0000
      lineWidth = 0.1
      pos = (0, -0.3)
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    PolygonComponent green_cross_9500
      fillColor = -1.0000, 0.0039, -1.0000
      lineColor = -1.0000, 0.0039, -1.0000
      pos = (0, -0.3)
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 9.5
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  Routine intertrial_interval
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    PolygonComponent red_intertrial
      fillColor = 1.0000, -1.0000, -1.0000
      lineColor = 1.0000, -1.0000, -1.0000
      pos = (0, -0.3)
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $trial_duration
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    CodeComponent intertrial_dur
      Code Type = Py
      Before Experiment:
        import random
      Begin Experiment:
        intertrial_intervals=[0.25,0.5,0.75]
      Begin Routine:
        trial=random.shuffle(intertrial_intervals)
        trial_duration=intertrial_intervals[0]
  Routine metronome_tap
    RoutineSettingsComponent metronome_tap
      skipIf = $stim=="sham"
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    TextComponent metro_tap
      letterHeight = 0.03
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      text = Tap with the metronome
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    PolygonComponent green_cross_2000
      fillColor = -1.0000, 0.0039, -1.0000
      lineColor = -1.0000, 0.0039, -1.0000
      lineWidth = 0.1
      pos = (0, -0.3)
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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  Routine metronome_task
    RoutineSettingsComponent metronome_task
      skipIf = $stim=="sham"
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    TextComponent metro_prepare
      letterHeight = 0.03
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      text = Tap with the metronome when the cross turns green
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    PolygonComponent red_cross_4150_1
      fillColor = 1.0000, -1.0000, -1.0000
      lineColor = 1.0000, -1.0000, -1.0000
      pos = (0, -0.3)
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 5.0
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    TextComponent metro_tap_1
      letterHeight = 0.03
      pos = (0, -0.2)
      startVal [time (s)] = 05.0
      stopVal [duration (s)] = 5.0
      text = Tap with the metronome
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    PolygonComponent green_cross_2000_1
      fillColor = -1.0000, 0.0039, -1.0000
      lineColor = -1.0000, 0.0039, -1.0000
      lineWidth = 0.1
      pos = (0, -0.3)
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 05.0
      stopVal [duration (s)] = 5.0
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    TextComponent stop_tapping
      letterHeight = 0.03
      pos = (0, -0.2)
      startVal [time (s)] = 010.0
      stopVal [duration (s)] = 5.0
      text = Stop tapping with the metronome
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    PolygonComponent red_listen_2400
      fillColor = 1.0000, -1.0000, -1.0000
      lineColor = 1.0000, -1.0000, -1.0000
      pos = (0, -0.3)
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 010.0
      stopVal [duration (s)] = 5.0
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    TextComponent metro_tap_2
      letterHeight = 0.03
      pos = (0, -0.2)
      startVal [time (s)] = 15.0
      stopVal [duration (s)] = 5.0
      text = Tap with the metronome
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    PolygonComponent green_cross_2000_2
      fillColor = -1.0000, 0.0039, -1.0000
      lineColor = -1.0000, 0.0039, -1.0000
      lineWidth = 0.1
      pos = (0, -0.3)
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 015.0
      stopVal [duration (s)] = 5.0
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    PolygonComponent red_cross_4150_2
      fillColor = 1.0000, -1.0000, -1.0000
      lineColor = 1.0000, -1.0000, -1.0000
      pos = (0, -0.3)
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 020.0
      stopVal [duration (s)] = 5.0
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  Routine metronome_stop
    RoutineSettingsComponent metronome_stop
      skipIf = $stim=="sham"
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    PolygonComponent red_listen
      fillColor = 1.0000, -1.0000, -1.0000
      lineColor = 1.0000, -1.0000, -1.0000
      pos = (0, -0.3)
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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    TextComponent stop_tapping_2400
      letterHeight = 0.03
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      text = Stop tapping with the metronome
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  Routine metronome_end
    RoutineSettingsComponent metronome_end
      skipIf = $stim=="sham"
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    PolygonComponent red_cross_4150
      fillColor = 1.0000, -1.0000, -1.0000
      lineColor = 1.0000, -1.0000, -1.0000
      pos = (0, -0.3)
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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  Routine condition
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  Routine set_intermediate
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    CodeComponent code
      Code Type = Py
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      Begin Routine:
        if "active" in condition:
            stim="active"
        if "sham" in condition:
            stim="sham"
  Routine Break
    RoutineSettingsComponent Break
      skipIf = $stim=="active"
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    TextComponent intermediate_break
      color = 1.0000, 1.0000, 1.0000
      letterHeight = 0.03
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      stopVal [condition] = 0.0
      text = Please, take a break.
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    KeyboardComponent continue2
      allowedKeys = '1','enter','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine pop_condition
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    CodeComponent code_4
      Code Type = Py
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      Begin Routine:
        conditions.pop(0)
  Routine thanks
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    TextComponent thankyou
      letterHeight = 0.03
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      text = Thank you for participating! 
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  Routine set_conditions
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    CodeComponent conditions_shuffle
      Code Type = Py
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      Before Experiment:
        import csv
        import random
      Begin Experiment:
        conditions = []
        with open('conditions_active1_sham2.csv', mode = 'r') as file:
            csv_reader = csv.reader(file)
            for row in csv_reader:
                for i in row:
                    conditions.append(i)

        random.shuffle(conditions)
Flow
  Routine set_conditions
  LoopInitiator trials_2 loopType="TrialHandler"
    loopType = sequential
    nReps = 2
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    Routine get_ready
    LoopInitiator trials loopType="TrialHandler"
      conditions = []
      loopType = sequential
      nReps = 2
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      Routine task_12_taps
      Routine intertrial_interval
    LoopTerminator trials
    Routine metronome_task
    Routine Break
    Routine pop_condition
  LoopTerminator trials_2
  Routine thanks
